CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:36
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CH1")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH2")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH4")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,55
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

RescaleIntensity:[module_num:6|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
    Select the input image:OrigGreen
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:RescaleIntensity
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:12
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:EnhanceCytoplasms
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:OrigRed
    Name the output image:EnhancePuncta
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:CytoplasmSecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:EnhanceCytoplasms
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.388
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Identify punctae using red channel']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
    Select the input image:EnhancePuncta
    Name the primary objects to be identified:Puncta
    Typical diameter of objects, in pixel units (Min,Max):3,17
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:25
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    Thresholding method:Minimum Cross-Entropy

GrayToColor:[module_num:12|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:OrigRed
    Select the image to be colored green:OrigGreen
    Select the image to be colored blue:OrigBlue
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
MaskObjects:[module_num:13|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
    Select objects to be masked:Nuclei
    Name the masked objects:NuclearPuncta
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Puncta
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:14|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
    Select objects to be masked:CytoplasmSecondaryObjects
    Name the masked objects:CytoplasmicPuncta
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Puncta
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:15|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
    Select objects to be masked:Nuclei
    Name the masked objects:NucleiWithoutPuncta
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NuclearPuncta
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:16|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
    Select objects to be masked:CytoplasmSecondaryObjects
    Name the masked objects:CytoplasmsWithoutPuncta
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CytoplasmicPuncta
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskImage:[module_num:17|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
    Select the input image:OrigRed
    Name the output image:OrigRedMinusNuclearPuncta
    Use objects or an image as a mask?:Objects
    Select object for mask:NuclearPuncta
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    Invert the mask?:Yes

MaskImage:[module_num:18|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
    Select the input image:OrigGreen
    Name the output image:OrigGreenMinusNuclearPuncta
    Use objects or an image as a mask?:Objects
    Select object for mask:NuclearPuncta
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    Invert the mask?:Yes

MaskImage:[module_num:19|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
    Select the input image:OrigGreen
    Name the output image:OrigGreenMinusCytoplasmicPuncta
    Use objects or an image as a mask?:Objects
    Select object for mask:CytoplasmicPuncta
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    Invert the mask?:Yes

MaskImage:[module_num:20|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
    Select the input image:OrigRed
    Name the output image:OrigRedMinusCytoplasmicPuncta
    Use objects or an image as a mask?:Objects
    Select object for mask:CytoplasmicPuncta
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    Invert the mask?:Yes

CombineObjects:[module_num:21|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
    Select initial object set:CytoplasmSecondaryObjects
    Select object set to combine:Nuclei
    Select how to handle overlapping objects:Merge
    Name the combined object set:CytoplasmPlusNuclei

ExpandOrShrinkObjects:[module_num:22|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
    Select the input objects:CytoplasmPlusNuclei
    Name the output objects:GrownCytoplasmPlusNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:15
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
IdentifyTertiaryObjects:[module_num:23|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
    Select the larger identified objects:GrownCytoplasmPlusNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoplasmAloneWithPuncta
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:24|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
    Select the larger identified objects:CytoplasmAloneWithPuncta
    Select the smaller identified objects:Puncta
    Name the tertiary objects to be identified:CytoplasmAloneWithoutPuncta
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:25|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
    Select the larger identified objects:Nuclei
    Select the smaller identified objects:Puncta
    Name the tertiary objects to be identified:NucleiAloneWithoutPunctaThisOne
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:26|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
    Select object sets to measure:CytoplasmAloneWithoutPuncta, NucleiAloneWithoutPunctaThisOne, Puncta
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:27|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
    Parent objects:GrownCytoplasmPlusNuclei
    Child objects:Puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PunctaWithinCells
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
MeasureObjectIntensity:[module_num:28|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
    Select images to measure:OrigGreen, OrigRed
    Select objects to measure:CytoplasmAloneWithoutPuncta, NucleiAloneWithoutPunctaThisOne, PunctaWithinCells

CalculateMath:[module_num:29|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
    Name the output measurement:PunctaGtoR
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:PunctaWithinCells
    Select the numerator measurement:Intensity_IntegratedIntensity_OrigGreen
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:PunctaWithinCells
    Select the denominator measurement:Intensity_IntegratedIntensity_OrigRed
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:30|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
    Name the output measurement:CytoplasmGtoR
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CytoplasmAloneWithoutPuncta
    Select the numerator measurement:Intensity_IntegratedIntensity_OrigGreen
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:CytoplasmAloneWithoutPuncta
    Select the denominator measurement:Intensity_IntegratedIntensity_OrigRed
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:31|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
    Name the output measurement:NuclearGtoR
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:NucleiAloneWithoutPunctaThisOne
    Select the numerator measurement:Intensity_IntegratedIntensity_OrigGreen
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:NucleiAloneWithoutPunctaThisOne
    Select the denominator measurement:Intensity_IntegratedIntensity_OrigRed
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:32|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#99FF00
    Select objects to display:CytoplasmAloneWithoutPuncta
    Select outline color:#FF0D00
    Select objects to display:PunctaWithinCells
    Select outline color:#01BFFE
    Select objects to display:NucleiAloneWithoutPunctaThisOne

DisplayDataOnImage:[module_num:33|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
    Display object or image measurements?:Object
    Select the input objects:Puncta
    Measurement to display:Parent_GrownCytoplasmPlusNuclei
    Select the image on which to display the measurements:Overlay
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:34|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
    Display object or image measurements?:Object
    Select the input objects:Puncta
    Measurement to display:Parent_GrownCytoplasmPlusNuclei
    Select the image on which to display the measurements:Overlay
    Text color:#FF80FF
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ExportToSpreadsheet:[module_num:35|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - Oregon Health & Science University\\From_Box\\Work Documents\\Office\\WordDocs\\Research\\Grants\\NP R01-Choi-Kim-Resub2022\\pdata
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:NucleiAloneWithoutPunctaThisOne|Number_Object_Number,NucleiAloneWithoutPunctaThisOne|Math_NuclearGtoR,CytoplasmAloneWithoutPuncta|Math_CytoplasmGtoR,PunctaWithinCells|Math_PunctaGtoR,PunctaWithinCells|Parent_Puncta
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:PunctaWithinCells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CytoplasmAloneWithoutPuncta
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiAloneWithoutPunctaThisOne
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:overlay
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive - Oregon Health & Science University\\From_Box\\Work Documents\\Office\\WordDocs\\Research\\Grants\\NP R01-Choi-Kim-Resub2022\\pdata\\cellprofilerImageOutput
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
